<?xml version="1.0" encoding="UTF-8"?><batch mzmine_version="3.9.0">
    <batchstep method="io.github.mzmine.modules.io.import_spectral_library.SpectralLibraryImportModule" parameter_version="1">
        <parameter name="Spectral library files">
            <file>C:\Users\Axel\Desktop\These\Projets\Manzamine_V2\MS Probes\iso_scaffold_GNPS.mgf</file>
            <file>C:\Users\Axel\Desktop\These\Projets\Manzamine_V2\MS Probes\keramaphidin_B_scaffold_GNPS.mgf</file>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.id_spectral_library_match.SpectralLibrarySearchModule" parameter_version="2">
        <parameter name="Feature lists" type="NAME_PATTERN">
            <name_pattern>*MERGE keramaphidin_scaffold</name_pattern>
        </parameter>
        <parameter name="Spectral libraries" type="SPECIFIC">
            <specific_file>C:\Users\Axel\Desktop\These\Projets\Manzamine_V2\MS Probes\keramaphidin_B_scaffold_GNPS.mgf</specific_file>
        </parameter>
        <parameter name="Scans for matching">MS2 (all scans)</parameter>
        <parameter name="Precursor m/z tolerance">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>0.0</ppmtolerance>
        </parameter>
        <parameter name="Spectral m/z tolerance">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>0.0</ppmtolerance>
        </parameter>
        <parameter name="Remove precursor">false</parameter>
        <parameter name="Minimum  matched signals">10</parameter>
        <parameter name="Similarity" selected_item="Weighted cosine similarity">
            <module name="Weighted cosine similarity">
                <parameter name="Weights">NONE (mz^0 * I^1)</parameter>
                <parameter name="Minimum  cos similarity">0.0</parameter>
                <parameter name="Handle unmatched signals">KEEP ALL AND MATCH TO ZERO</parameter>
            </module>
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        </parameter>
        <parameter name="Advanced" selected="false">
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.id_spectral_library_match.SpectralLibrarySearchModule" parameter_version="2">
        <parameter name="Feature lists" type="NAME_PATTERN">
            <name_pattern>*MERGE iso_scaffold</name_pattern>
        </parameter>
        <parameter name="Spectral libraries" type="SPECIFIC">
            <specific_file>C:\Users\Axel\Desktop\These\Projets\Manzamine_V2\MS Probes\iso_scaffold_GNPS.mgf</specific_file>
        </parameter>
        <parameter name="Scans for matching">MS2 (all scans)</parameter>
        <parameter name="Precursor m/z tolerance">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Spectral m/z tolerance">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Remove precursor">false</parameter>
        <parameter name="Minimum  matched signals">10</parameter>
        <parameter name="Similarity" selected_item="Weighted cosine similarity">
            <module name="Weighted cosine similarity">
                <parameter name="Weights">NONE (mz^0 * I^1)</parameter>
                <parameter name="Minimum  cos similarity">0.0</parameter>
                <parameter name="Handle unmatched signals">KEEP ALL AND MATCH TO ZERO</parameter>
            </module>
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        </parameter>
        <parameter name="Advanced" selected="false">
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule" parameter_version="2">
        <parameter name="Feature lists" type="NAME_PATTERN">
            <name_pattern>*MERGE keramaphidin_scaffold</name_pattern>
        </parameter>
        <parameter name="Name suffix">ANNOTATED_FILT</parameter>
        <parameter name="Minimum aligned features (samples)" selected="false">
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        </parameter>
        <parameter name="Minimum features in an isotope pattern" selected="false">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</parameter>
        <parameter name="Validate 13C isotope pattern" selected="false">
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        </parameter>
        <parameter name="Remove redundant isotope rows">false</parameter>
        <parameter name="m/z" selected="false">
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        </parameter>
        <parameter name="Retention time" selected="false">
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        </parameter>
        <parameter name="features duration range" selected="false">
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        </parameter>
        <parameter name="Chromatographic FWHM" selected="false">
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        </parameter>
        <parameter name="Charge" selected="false">
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        </parameter>
        <parameter name="Kendrick mass defect" selected="false">
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        </parameter>
        <parameter name="Parameter">No parameters defined</parameter>
        <parameter name="Only identified?">true</parameter>
        <parameter name="Text in identity" selected="false"/>
        <parameter name="Text in comment" selected="false"/>
        <parameter name="Keep or remove rows">Keep rows that match all criteria</parameter>
        <parameter name="Feature with MS2 scan">true</parameter>
        <parameter name="Never remove feature with MS2">false</parameter>
        <parameter name="Reset the feature number ID">false</parameter>
        <parameter name="Mass defect" selected="false"/>
        <parameter name="Original feature list">KEEP</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule" parameter_version="2">
        <parameter name="Feature lists" type="NAME_PATTERN">
            <name_pattern>*MERGE iso_scaffold</name_pattern>
        </parameter>
        <parameter name="Name suffix">ANNOTATED_FILT</parameter>
        <parameter name="Minimum aligned features (samples)" selected="false">
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        </parameter>
        <parameter name="Minimum features in an isotope pattern" selected="false">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</parameter>
        <parameter name="Validate 13C isotope pattern" selected="false">
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        </parameter>
        <parameter name="Remove redundant isotope rows">false</parameter>
        <parameter name="m/z" selected="false">
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        </parameter>
        <parameter name="Retention time" selected="false">
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        </parameter>
        <parameter name="features duration range" selected="false">
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        </parameter>
        <parameter name="Chromatographic FWHM" selected="false">
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        </parameter>
        <parameter name="Charge" selected="false">
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        </parameter>
        <parameter name="Kendrick mass defect" selected="false">
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        </parameter>
        <parameter name="Parameter">No parameters defined</parameter>
        <parameter name="Only identified?">true</parameter>
        <parameter name="Text in identity" selected="false"/>
        <parameter name="Text in comment" selected="false"/>
        <parameter name="Keep or remove rows">Keep rows that match all criteria</parameter>
        <parameter name="Feature with MS2 scan">true</parameter>
        <parameter name="Never remove feature with MS2">false</parameter>
        <parameter name="Reset the feature number ID">false</parameter>
        <parameter name="Mass defect" selected="false"/>
        <parameter name="Original feature list">KEEP</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_compoundAnnotations_csv.CompoundAnnotationsCSVExportModule" parameter_version="1">
        <parameter name="Feature lists" type="NAME_PATTERN">
            <name_pattern>*keramaphidin_scaffold ANNOTATED_FILT</name_pattern>
        </parameter>
        <parameter name="Filename">
            <current_file>C:\Users\Axel\Desktop\These\Projets\Manzamine_V2\Dereplication\MZmine_3_9_0\results\keramaphidin_annotation.csv</current_file>
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        </parameter>
        <parameter name="Top N per method">10</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_compoundAnnotations_csv.CompoundAnnotationsCSVExportModule" parameter_version="1">
        <parameter name="Feature lists" type="NAME_PATTERN">
            <name_pattern>*iso_scaffold ANNOTATED_FILT</name_pattern>
        </parameter>
        <parameter name="Filename">
            <current_file>C:\Users\Axel\Desktop\These\Projets\Manzamine_V2\Dereplication\MZmine_3_9_0\results\iso_annotation.csv</current_file>
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        </parameter>
        <parameter name="Top N per method">10</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_gnps.fbmn.GnpsFbmnExportAndSubmitModule" parameter_version="2">
        <parameter name="Feature lists" type="NAME_PATTERN">
            <name_pattern>*MERGE keramaphidin_scaffold</name_pattern>
        </parameter>
        <parameter name="Filename">
            <current_file>C:\Users\Axel\Desktop\These\Projets\Manzamine_V2\Dereplication\MZmine_3_9_0\results\keramaphidin_scaffold.mgf</current_file>
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        </parameter>
        <parameter name="Merge MS/MS (experimental)" selected="false">
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        </parameter>
        <parameter name="Filter rows">ONLY WITH MS2</parameter>
        <parameter name="Feature intensity">Area</parameter>
        <parameter name="CSV export">SIMPLE</parameter>
        <parameter name="Submit to GNPS" selected="false">
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        </parameter>
        <parameter name="Open folder">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_gnps.fbmn.GnpsFbmnExportAndSubmitModule" parameter_version="2">
        <parameter name="Feature lists" type="NAME_PATTERN">
            <name_pattern>*MERGE iso_scaffold</name_pattern>
        </parameter>
        <parameter name="Filename">
            <current_file>C:\Users\Axel\Desktop\These\Projets\Manzamine_V2\Dereplication\MZmine_3_9_0\results\iso_scaffold.mgf</current_file>
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        </parameter>
        <parameter name="Merge MS/MS (experimental)" selected="false">
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        </parameter>
        <parameter name="Filter rows">ONLY WITH MS2</parameter>
        <parameter name="Feature intensity">Area</parameter>
        <parameter name="CSV export">SIMPLE</parameter>
        <parameter name="Submit to GNPS" selected="false">
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        </parameter>
        <parameter name="Open folder">false</parameter>
    </batchstep>
</batch>
